<PlusConfiguration version="2.3">

  <DataCollection StartupDelaySec="1.0">
    <DeviceSet 
      Name="PlusServer: Interson USB ultrasound device with Interson SDK."
      Description="Broadcasting acquired video through OpenIGTLink"
    />
    <Device
      Id="VideoDevice"
      Type="IntersonSDKCxxVideo" 
      AcquisitionRate="12"
      DynRangeDb="0.4" 
      FrequencyMhz="3.75" >
      <DataSources>
        <DataSource Type="Video" Id="Video" PortName="B" PortUsImageOrientation="UF" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" >
          <RfProcessing>
            <ScanConversion 
              TransducerName="GP3.5"
              TransducerGeometry="CURVILINEAR"
              RadiusStartMm="12.4"
              RadiusStopMm="222.7"
              ThetaStartDeg="-45.0"
              ThetaStopDeg="45.0"
              OutputImageSizePixel="800 600"
              TransducerCenterPixel="400 50"
              OutputImageSpacingMmPerPixel="0.40 0.40" /> 
          </RfProcessing>
        </OutputChannel>
      </OutputChannels>
    </Device>

    <Device
      Id="CaptureDevice"
      Type="VirtualDiscCapture"
      BaseFilename="RecordingTest.mha"
      EnableCapturing="FALSE" >
      <InputChannels>
        <InputChannel Id="VideoStream" />
      </InputChannels>
    </Device>
  </DataCollection>

  <CoordinateDefinitions>
    <Transform From="Image" To="Reference"
      Matrix="
        0.2 0.0 0.0 0.0
        0.0 0.2 0.0 0.0
        0.0 0.0 0.2 0.0        
        0 0 0 1" />
  </CoordinateDefinitions>
  
  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18944" 
    SendValidTransformsOnly="true" 
    OutputChannelId="VideoStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="IMAGE" />
      </MessageTypes>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Reference" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

</PlusConfiguration>
